PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 720]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = test1234
  Units = use prefs
  Screen = 1
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Routines
  Routine test1
    TextComponent text
      text [set every repeat] = $word1
      pos = [-0.3, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_2
      text [set every repeat] = $word2
      pos = [0.3, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      correctAns = $corrans
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'f','j'
      startVal [time (s)] = 0.0
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    TextComponent text_16
      text = Which word is more 'Word-like'?
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine test3
    SoundComponent lrsoundfile
      sound [set every repeat] = $lrsound
      startVal [time (s)] = 0.0
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    TextComponent text_6
      text [set every repeat] = $lrword1
      pos = [-0.3, 0]
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    TextComponent text_7
      text [set every repeat] = $lrword2
      pos = [0.3, 0]
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_11
      correctAns = $corrans
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'f','j'
      startVal [time (s)] = 0.0
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    TextComponent text_8
      text = Which word is Correct by your listening?
      pos = [0, 0.3]
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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  Routine test4
    TextComponent text_15
      text = Speak loud and clear please!
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MicrophoneComponent mic_1
      stereo = False
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
  Routine break1
    TextComponent breakmes
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Now, you can take a break as long as you need before continuing.
        Please, press 'SPACEBAR' when you are ready to continue.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test4word
    TextComponent text_11
      text [set every repeat] = $recword
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_12
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        If you are ready to speak, Press 'SPACEBAR'.
        You should speak the word in 3 seconds.
    KeyboardComponent key_resp_14
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine break3
    TextComponent text_9
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Now, you can take a break as long as you need before continuing.
        Please, press 'SPACEBAR' when you are ready to continue.
    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine break2
    TextComponent text_5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Now, you can take a break as long as you need before continuing.
        Please, press 'SPACEBAR' when you are ready to continue.
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test2word2
    SoundComponent nonwo2
      sound [set every repeat] = $nonword2
      startVal [time (s)] = 2
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    KeyboardComponent key_resp_8
      correctAns = $corrans
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'f','j'
      startVal [time (s)] = 2
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    TextComponent text_4
      startVal [time (s)] = 2
      letterHeight = 0.1
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      text:
        Which word is more 'Word-like'?
        If you think First one is more 'Word-like', Press 'F'.
        If you think second one is more 'Word-like', Press 'J'.
    SoundComponent nonwo1
      sound [set every repeat] = $nonword1
      startVal [time (s)] = 0.0
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  Routine test3intro
    TextComponent test3IntroMsg
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Test3

        In this test, you will hear 34 spoken words.
        Then you need to choose one written word which you heard before.
        If you don't have confidnece about your choice, just believe your gut!
        If you are ready, Press 'SPACEBAR' for listening the first word.
    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Introduction
    TextComponent introMessage
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome to the LEAP Lab!
        You will have 5 test to measure your English Ablity.
        For the test, it will take about 1 and half hour including the break time.
        The break will be given during the each Test.
        If you have any questions during the test,
        please ask to the mannger in the break time or test intro time.
        Then, let's begin! Press the 'SPACEBAR'.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test1intro
    TextComponent test1Intro
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Test1

        In this test, you will see 40 set of written pseudowords.
        Then you need to choose one word which seems more 'Wordlike'.
        When you think the Left word is more 'Word-like', then Press 'F'.
        When you think the Right word is more 'Word-like', then Press 'J'.
        If you don't have confidnece about your choice, just believe your gut!
        If you are ready, Press 'SPACEBAR'.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test3_res
  Routine test2break
    TextComponent text_14
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        If you are ready to listen next word,
        Press 'SPACEBAR'!
    KeyboardComponent key_resp_16
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test4intro
    TextComponent text_10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Test4

        In this test, you will see 36 written words.
        Then you need to speak the word as clear as you can.
        If you are ready, Press 'SPACEBAR'.
    KeyboardComponent key_resp_13
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test2intro
    TextComponent test2IntroMsg
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Test2

        In this test, you will hear 40 set of spoken pseudowords.
        Each word will be given by Pressing 'SPACEBAR'.
        Then you need to choose one word which sounds more 'Word-like'.
        When you think the First word is more 'Word-like', then Press 'F'.
        When you think the Second word is more 'Word-like', then Press 'J'.
        If you don't have confidnece about your choice, just believe your gut!
        If you are ready, Press 'SPACEBAR' for listening the first word.
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine endpage
    TextComponent text_13
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You have now come to the end of our first 4 experiment.
        Now, you will have final test.
        Please wait for a while.
        Press, 'SPACEBAR' for tuning off the program.
    KeyboardComponent key_resp_15
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Introduction
  Routine test1intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = test1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'sourcetype': u'L', u'frame': u'polic', u'word1': u'policite', u'corrans': u'f', u'word2': u'poricite', u'tafo': u'target', u'difference': 0.0047},
      {u'sourcetype': u'L', u'frame': u'plan', u'word1': u'plansy', u'corrans': u'f', u'word2': u'pransy', u'tafo': u'target', u'difference': 0.0466},
      {u'sourcetype': u'L', u'frame': u'glas', u'word1': u'grasiam', u'corrans': u'j', u'word2': u'glasiam', u'tafo': u'target', u'difference': 0.0466},
      {u'sourcetype': u'L', u'frame': u'blam', u'word1': u'bramojo', u'corrans': u'j', u'word2': u'blamojo', u'tafo': u'target', u'difference': 0.0466},
      {u'sourcetype': u'L', u'frame': u'cloc', u'word1': u'crocisen', u'corrans': u'j', u'word2': u'clocisen', u'tafo': u'target', u'difference': 0.0466},
      {u'sourcetype': u'L', u'frame': u'allo', u'word1': u'arlotony', u'corrans': u'j', u'word2': u'allotony', u'tafo': u'target', u'difference': 0.0466},
      {u'sourcetype': u'L', u'frame': u'bloc', u'word1': u'blocaten', u'corrans': u'f', u'word2': u'brocaten', u'tafo': u'target', u'difference': 0.0466},
      {u'sourcetype': u'L', u'frame': u'bles', u'word1': u'bresist', u'corrans': u'j', u'word2': u'blesist', u'tafo': u'target', u'difference': 0.0466},
      {u'sourcetype': u'L', u'frame': u'clos', u'word1': u'crosenty', u'corrans': u'j', u'word2': u'closenty', u'tafo': u'target', u'difference': 0.0466},
      {u'sourcetype': u'L', u'frame': u'alon', u'word1': u'aloncio', u'corrans': u'f', u'word2': u'aroncio', u'tafo': u'target', u'difference': 0.0466}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
    Routine test1
  LoopTerminator trials
  Routine break1
  Routine test2intro
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'SourceType': u'class', u'frame': u'clas', u'nonword2': u'test2_audio/crasib.wav', u'nonword1': u'test2_audio/clasib.wav', u'tafo': u'target', u'difference': 0.0466, u'corrans': u'f'},
      {u'SourceType': u'plane', u'frame': u'plan', u'nonword2': u'test2_audio/pranaquer.wav', u'nonword1': u'test2_audio/planaquer.wav', u'tafo': u'target', u'difference': 0.0466, u'corrans': u'f'},
      {u'SourceType': u'closet', u'frame': u'clos', u'nonword2': u'test2_audio/closion.wav', u'nonword1': u'test2_audio/crosion.wav', u'tafo': u'target', u'difference': 0.0466, u'corrans': u'j'},
      {u'SourceType': u'place', u'frame': u'plac', u'nonword2': u'test2_audio/plaicin.wav', u'nonword1': u'test2_audio/praicin.wav', u'tafo': u'target', u'difference': 0.0466, u'corrans': u'j'},
      {u'SourceType': u'alone', u'frame': u'alon', u'nonword2': u'test2_audio/alonuny.wav', u'nonword1': u'test2_audio/aronuny.wav', u'tafo': u'target', u'difference': 0.0466, u'corrans': u'j'},
      {u'SourceType': u'sleep', u'frame': u'slee', u'nonword2': u'test2_audio/sleedery.wav', u'nonword1': u'test2_audio/sreedery.wav', u'tafo': u'target', u'difference': 0.0466, u'corrans': u'j'},
      {u'SourceType': u'plenty', u'frame': u'plen', u'nonword2': u'test2_audio/prenth.wav', u'nonword1': u'test2_audio/plenth.wav', u'tafo': u'target', u'difference': 0.0466, u'corrans': u'f'}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
    Routine test2word2
    Routine test2break
  LoopTerminator trials_2
  Routine break2
  Routine test3intro
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = test3.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'lrword1': u'fright', 'type': u'target', 'lrword2': u'flight', 'lrsound': u'test3_audio/fright.wav', 'corrans': u'f'},
      {'lrword1': u'store', 'type': u'target', 'lrword2': u'stole', 'lrsound': u'test3_audio/store.wav', 'corrans': u'f'},
      {'lrword1': u'frame', 'type': u'target', 'lrword2': u'flame', 'lrsound': u'test3_audio/flame.wav', 'corrans': u'j'},
      {'lrword1': u'spray', 'type': u'target', 'lrword2': u'splay', 'lrsound': u'test3_audio/splay.wav', 'corrans': u'j'},
      {'lrword1': u'late', 'type': u'target', 'lrword2': u'rate', 'lrsound': u'test3_audio/rate.wav', 'corrans': u'j'},
      {'lrword1': u'lied', 'type': u'target', 'lrword2': u'ride', 'lrsound': u'test3_audio/ride.wav', 'corrans': u'j'},
      {'lrword1': u'brunt', 'type': u'target', 'lrword2': u'blunt', 'lrsound': u'test3_audio/brunt.wav', 'corrans': u'f'},
      {'lrword1': u'laze', 'type': u'target', 'lrword2': u'raise', 'lrsound': u'test3_audio/raise.wav', 'corrans': u'j'},
      {'lrword1': u'croak', 'type': u'target', 'lrword2': u'cloak', 'lrsound': u'test3_audio/cloak.wav', 'corrans': u'j'},
      {'lrword1': u'lamp', 'type': u'target', 'lrword2': u'ramp', 'lrsound': u'test3_audio/lamp.wav', 'corrans': u'f'},
      {'lrword1': u'glow', 'type': u'target', 'lrword2': u'grow', 'lrsound': u'test3_audio/grow.wav', 'corrans': u'j'},
      {'lrword1': u'graze', 'type': u'target', 'lrword2': u'glaze', 'lrsound': u'test3_audio/glaze.wav', 'corrans': u'j'},
      {'lrword1': u'wiry', 'type': u'target', 'lrword2': u'wily', 'lrsound': u'test3_audio/wiry.wav', 'corrans': u'f'}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
    Routine test3
  LoopTerminator trials_3
  Routine break3
  Routine test4intro
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = test4.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'recword': u'rye', 'type': u'target'},
      {'recword': u'river', 'type': u'target'},
      {'recword': u'reap', 'type': u'target'},
      {'recword': u'loot', 'type': u'target'},
      {'recword': u'leach', 'type': u'target'},
      {'recword': u'rove', 'type': u'target'},
      {'recword': u'race', 'type': u'target'},
      {'recword': u'rand', 'type': u'target'},
      {'recword': u'rife', 'type': u'target'},
      {'recword': u'rap', 'type': u'target'},
      {'recword': u'rest', 'type': u'target'},
      {'recword': u'rope', 'type': u'target'},
      {'recword': u'rock', 'type': u'target'},
      {'recword': u'rink', 'type': u'target'},
      {'recword': u'rot', 'type': u'target'},
      {'recword': u'reader', 'type': u'target'},
      {'recword': u'crown', 'type': u'target'},
      {'recword': u'grew', 'type': u'target'},
      {'recword': u'arrive', 'type': u'target'},
      {'recword': u'correct', 'type': u'target'},
      {'recword': u'poor', 'type': u'target'},
      {'recword': u'here', 'type': u'target'},
      {'recword': u'over', 'type': u'target'},
      {'recword': u'wire', 'type': u'target'},
      {'recword': u'rake', 'type': u'target'},
      {'recword': u'belly', 'type': u'target'},
      {'recword': u'lather', 'type': u'target'},
      {'recword': u'rear', 'type': u'target'},
      {'recword': u'locket', 'type': u'target'},
      {'recword': u'rob', 'type': u'target'},
      {'recword': u'prices', 'type': u'foil'},
      {'recword': u'reviews', 'type': u'foil'},
      {'recword': u'gain', 'type': u'foil'},
      {'recword': u'bag', 'type': u'foil'},
      {'recword': u'save', 'type': u'foil'},
      {'recword': u'rang', 'type': u'foil'},
      {'recword': u'van', 'type': u'foil'},
      {'recword': u'vail', 'type': u'foil'}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
    Routine test4word
    Routine test4
  LoopTerminator trials_4
  Routine endpage
